graphs:

  - id: EEG
    nodes:
    - id: eeg
      module: timeflux.nodes.lsl
      class: Receive
      params:
        prop: name
        value: X.on-101410-0011
        clocksync: true
        dejitter: true
        monotonize: true
    - id: channels
      module: timeflux.nodes.query
      class: LocQuery
      params:
        key: [F3, F4, C3, Cz, C4, P3, P4]
    - id: notch
      module: timeflux_dsp.nodes.filters
      class: IIRFilter
      params:
        filter_type: bandstop
        frequencies: [45, 55]
        order: 1
    - id: bandpass
      module: timeflux_dsp.nodes.filters
      class: IIRFilter
      params:
        filter_type: bandpass
        frequencies: [1, 40]
        order: 2
    - id: pub_raw
      module: timeflux.nodes.zmq
      class: Pub
      params:
        topic: raw
    - id: pub_filtered
      module: timeflux.nodes.zmq
      class: Pub
      params:
        topic: filtered
    edges:
      - source: eeg
        target: pub_raw
      - source: eeg
        target: channels
      - source: channels
        target: notch
      - source: notch
        target: bandpass
      - source: bandpass
        target: pub_filtered
    rate: 10